def model my_model as
  // BG CVS model extended to include a more detailed lung circulation
  def unit dim as
    unit dimensionless;
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit L_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit kPa as
    unit joule;
    unit litre {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit L_per_s;
    unit kPa {expo: -1};
  enddef;
  def unit kPa_per_L as
    unit kPa;
    unit litre {expo: -1};
  enddef;
  def unit kPa_s_per_L as
    unit kPa;
    unit L_per_s {expo: -1};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit meter {expo: -5};
  enddef;
  def unit m_per_s2 as
    unit meter;
    unit second {expo: -2};
  enddef;

  def comp main as
    var t: second;
    var rho: Js2_per_m5 {init: 1e3};
    var g: m_per_s2 {init: 9.81};
    var theta_deg: dim {init: 90};
    var theta_rad: radian;
    theta_rad = theta_deg*pi/180{dim};
    var z: dim;
    z = sel
      case (t > 100{second}) and (t < 101{second}):
        1{dim};
      otherwise:
        0{dim};
    endsel;
    // Triangular waveform mt with period T. Triangular waveform delayed by a constant is mta
    var T: second {init: 1};
    var mt: dim;
    var mta: dim;
    var delay: dim {init: 0.1};
    var To_pk: dim {init: 0.1};
    mt = t/T-floor(t/T);
    mta = t/T-delay-floor((t-delay*T)/T);
    // Left ventricle
    var E_LV: kPa_per_L;
    var E_LVmax: kPa_per_L {init: 320};
    var E_LVmin: kPa_per_L {init: 6.667};
    var q_LV: litre {init: 1};
    var q_LV_us: litre {init: 0.005};
    var u_LV: kPa;
    E_LV = sel
      case mt < 0.4{dim}:
        (E_LVmax-E_LVmin)*mt/To_pk*exp(0.5{dim}*(1{dim}-sqr(mt/To_pk)))+E_LVmin;
      case mt < 0.6{dim}:
        (E_LVmax-E_LVmin)*0.4{dim}/To_pk*exp(0.5{dim}*(1{dim}-sqr(0.4{dim}/To_pk)))+E_LVmin;
      otherwise:
        E_LVmin;
    endsel;
    ode(q_LV, t) = v_MV-v_AV;
    u_LV = E_LV*(q_LV-q_LV_us);
    // Right ventricle
    var E_RV: kPa_per_L;
    var E_RVmax: kPa_per_L {init: 70};
    var E_RVmin: kPa_per_L {init: 2};
    var q_RV: litre {init: 0.2};
    var q_RV_us: litre {init: 0.01};
    var u_RV: kPa;
    E_RV = sel
      case mt < 0.4{dim}:
        (E_RVmax-E_RVmin)*mt/To_pk*exp(0.5{dim}*(1{dim}-sqr(mt/To_pk)))+E_RVmin;
      case mt < 0.6{dim}:
        (E_RVmax-E_RVmin)*0.4{dim}/To_pk*exp(0.5{dim}*(1{dim}-sqr(0.4{dim}/To_pk)))+E_RVmin;
      otherwise:
        E_RVmin;
    endsel;
    ode(q_RV, t) = v_TV-v_PV;
    u_RV = E_RV*(q_RV-q_RV_us);
    // Left atrium
    var E_LA: kPa_per_L {init: 10};
    var q_LA: litre {init: 0.02};
    var q_LA_us: litre {init: 0.004};
    var u_LA: kPa;
    ode(q_LA, t) = v_PulmV-v_MV;
    u_LA = E_LA*(q_LA-q_LA_us);
    // Right atrium
    var E_RA: kPa_per_L {init: 10};
    var q_RA: litre {init: 0.02};
    var q_RA_us: litre {init: 0.004};
    var u_RA: kPa;
    ode(q_RA, t) = v_brain3+v_liver2+v_lRenal3+v_rRenal3+v_musTorso3+v_lArm3+v_rArm3+v_lLeg3+v_rLeg3-v_TV;
    u_RA = E_RA*(q_RA-q_RA_us);
    // Aortic valve
    var R_AV: kPa_s_per_L {init: 1};
    var v_AV: L_per_s;
    v_AV = sel
      case u_LV > u_AA:
        (u_LV-u_AA)/R_AV;
      otherwise:
        0{L_per_s};
    endsel;
    // Pulmonary Valve
    var R_PV: kPa_s_per_L {init: 1};
    var v_PV: L_per_s;
    v_PV = sel
      case u_RV > u_PulmA:
        (u_RV-u_PulmA)/R_PV;
      otherwise:
        0{L_per_s};
    endsel;
    // Tricuspid Valve
    var R_TV: kPa_s_per_L {init: 1};
    var v_TV: L_per_s;
    v_TV = sel
      case u_RA > u_RV:
        (u_RA-u_RV)/R_TV;
      otherwise:
        0{L_per_s};
    endsel;
    // Mitral Valve
    var R_MV: kPa_s_per_L {init: 1};
    var v_MV: L_per_s;
    v_MV = sel
      case u_LA > u_LV:
        (u_LA-u_LV)/R_MV;
      otherwise:
        0{L_per_s};
    endsel;
    // Pulmonary artery
    var q_PulmA: litre {init: 0.3};
    var q_PulmA_us: litre {init: 0.2};
    var u_PulmA: kPa;
    var E_PulmA: kPa_per_L {init: 200};
    ode(q_PulmA, t) = v_PV-v_lPulmA;
    u_PulmA = E_PulmA*(q_PulmA-q_PulmA_us);
    // Left lung
    var v_lPulmA: L_per_s;
    var R_lPulmA: kPa_s_per_L {init: 1};
    v_lPulmA = (u_PulmA-u_lPulmA)/R_lPulmA;
    var q_lPulmA: litre {init: 0.3};
    var q_lPulmA_us: litre {init: 0.2};
    var u_lPulmA: kPa;
    var E_lPulmA: kPa_per_L {init: 200};
    ode(q_lPulmA, t) = v_lPulmA-v_lULobeA-v_lInterlobarA;
    u_lPulmA = E_lPulmA*(q_lPulmA-q_lPulmA_us);
    var v_lULobeA: L_per_s;
    var R_lULobeA: kPa_s_per_L {init: 1};
    v_lULobeA = (u_lPulmA-u_lULobeC)/R_lULobeA;
    var q_lULobeC: litre {init: 0.3};
    var q_lULobeC_us: litre {init: 0.2};
    var u_lULobeC: kPa;
    var E_lULobeC: kPa_per_L {init: 200};
    ode(q_lULobeC, t) = v_lULobeA-v_lULobeV;
    u_lULobeC = E_lULobeC*(q_lULobeC-q_lULobeC_us);
    var v_lULobeV: L_per_s;
    var R_lULobeV: kPa_s_per_L {init: 1};
    v_lULobeV = (u_lULobeC-u_PulmV)/R_lULobeV;
    var v_lInterlobarA: L_per_s;
    var R_lInterlobarA: kPa_s_per_L {init: 1};
    v_lInterlobarA = (u_lPulmA-u_lInterlobarA)/R_lInterlobarA;
    var q_lInterlobarA: litre {init: 0.3};
    var q_lInterlobarA_us: litre {init: 0.2};
    var u_lInterlobarA: kPa;
    var E_lInterlobarA: kPa_per_L {init: 200};
    ode(q_lInterlobarA, t) = v_lInterlobarA-v_lLLobeA;
    u_lInterlobarA = E_lInterlobarA*(q_lInterlobarA-q_lInterlobarA_us);
    var v_lLLobeA: L_per_s;
    var R_lLLobeA: kPa_s_per_L {init: 1};
    v_lLLobeA = (u_lInterlobarA-u_lLLobeA)/R_lLLobeA;
    var q_lLLobeA: litre {init: 0.3};
    var q_lLLobeA_us: litre {init: 0.2};
    var u_lLLobeA: kPa;
    var E_lLLobeA: kPa_per_L {init: 200};
    ode(q_lLLobeA, t) = v_lLLobeA-v_lLLobeV;
    u_lLLobeA = E_lLLobeA*(q_lLLobeA-q_lLLobeA_us);
    var v_lLLobeV: L_per_s;
    var R_lLLobeV: kPa_s_per_L {init: 1};
    v_lLLobeV = (u_lLLobeA-u_PulmV)/R_lLLobeV;
    // Right lung
    var v_rPulmA: L_per_s;
    var R_rPulmA: kPa_s_per_L {init: 1};
    v_rPulmA = (u_PulmA-u_rPulmA)/R_rPulmA;
    var q_rPulmA: litre {init: 0.3};
    var q_rPulmA_us: litre {init: 0.2};
    var u_rPulmA: kPa;
    var E_rPulmA: kPa_per_L {init: 200};
    ode(q_rPulmA, t) = v_rPulmA-v_rULobeA-v_rInterlobarA;
    u_rPulmA = E_rPulmA*(q_rPulmA-q_rPulmA_us);
    var v_rULobeA: L_per_s;
    var R_rULobeA: kPa_s_per_L {init: 1};
    v_rULobeA = (u_rPulmA-u_rULobeC)/R_rULobeA;
    var q_rULobeC: litre {init: 0.3};
    var q_rULobeC_us: litre {init: 0.2};
    var u_rULobeC: kPa;
    var E_rULobeC: kPa_per_L {init: 200};
    ode(q_rULobeC, t) = v_rULobeA-v_rULobeV;
    u_rULobeC = E_rULobeC*(q_rULobeC-q_rULobeC_us);
    var v_rULobeV: L_per_s;
    var R_rULobeV: kPa_s_per_L {init: 1};
    v_rULobeV = (u_rULobeC-u_PulmV)/R_rULobeV;
    var v_rInterlobarA: L_per_s;
    var R_rInterlobarA: kPa_s_per_L {init: 1};
    v_rInterlobarA = (u_rPulmA-u_rInterlobarA)/R_rInterlobarA;
    var q_rInterlobarA: litre {init: 0.3};
    var q_rInterlobarA_us: litre {init: 0.2};
    var u_rInterlobarA: kPa;
    var E_rInterlobarA: kPa_per_L {init: 200};
    ode(q_rInterlobarA, t) = v_rInterlobarA-v_rLLobeA;
    u_rInterlobarA = E_rInterlobarA*(q_rInterlobarA-q_rInterlobarA_us);
    var v_rLLobeA: L_per_s;
    var R_rLLobeA: kPa_s_per_L {init: 1};
    v_rLLobeA = (u_rInterlobarA-u_rLLobeA)/R_rLLobeA;
    var q_rLLobeA: litre {init: 0.3};
    var q_rLLobeA_us: litre {init: 0.2};
    var u_rLLobeA: kPa;
    var E_rLLobeA: kPa_per_L {init: 200};
    ode(q_rLLobeA, t) = v_rLLobeA-v_rLLobeV;
    u_rLLobeA = E_rLLobeA*(q_rLLobeA-q_rLLobeA_us);
    var v_rLLobeV: L_per_s;
    var R_rLLobeV: kPa_s_per_L {init: 1};
    v_rLLobeV = (u_rLLobeA-u_PulmV)/R_rLLobeV;
    // Pulmonary vein
    var E_PulmV: kPa_per_L {init: 20};
    var q_PulmV: litre {init: 0.02};
    var q_PulmV_us: litre {init: 0.012};
    var u_PulmV: kPa;
    ode(q_PulmV, t) = v_lULobeV-v_PulmV;
    u_PulmV = E_PulmV*(q_PulmV-q_PulmV_us);
    var v_PulmV: L_per_s;
    var R_PulmV: kPa_s_per_L {init: 1};
    v_PulmV = (u_PulmV-u_LA)/R_PulmV;
    // Brain
    var q_brain: litre {init: 0.1};
    var q_brain_us: litre {init: 0.06};
    var q_brainVein: litre {init: 0.1};
    var q_brainVein_us: litre {init: 0.06};
    var u_brain: kPa;
    var u_brainVein: kPa;
    var E_brain: kPa_per_L {init: 20};
    var E_brainVein: kPa_per_L {init: 20};
    ode(q_brain, t) = v_brain1-v_brain2;
    u_brain = E_brain*(q_brain-q_brain_us);
    ode(q_brainVein, t) = v_brain2-v_brain3;
    u_brainVein = E_brainVein*(q_brainVein-q_brainVein_us);
    var v_brain1: L_per_s;
    var v_brain2: L_per_s;
    var v_brain3: L_per_s;
    var R_brain1: kPa_s_per_L {init: 100};
    var R_brain2: kPa_s_per_L {init: 600};
    var R_brain3: kPa_s_per_L {init: 1};
    v_brain1 = (u_AA-u_brain)/R_brain1;
    v_brain2 = (u_brain-u_brainVein)/R_brain2;
    v_brain3 = (u_brainVein-u_RA)/R_brain3;
    // Ascending aorta
    var q_AA: litre {init: 0.2};
    var q_AA_us: litre {init: 0.12};
    var u_AA: kPa;
    var E_AA: kPa_per_L {init: 80};
    ode(q_AA, t) = v_AV-v_brain1-v_celiac-v_supMes-v_infMes-v_lRenal1-v_rRenal1-v_musTorso1-v_lArm1-v_rArm1-v_lLeg1-v_rLeg1;
    u_AA = E_AA*(q_AA-q_AA_us);
    // Celiac branch of the aorta
    var q_celiac: litre {init: 0.1};
    var q_celiac_us: litre {init: 0.06};
    var u_celiac: kPa;
    var E_celiac: kPa_per_L {init: 400};
    var z_celiac: meter {init: 0.20};
    ode(q_celiac, t) = v_celiac-v_liver1-v_stomach1-v_spleen1-v_pancreas1;
    u_celiac = E_celiac*(q_celiac-q_celiac_us);
    var v_celiac: L_per_s;
    var R_celiac: kPa_s_per_L {init: 100};
    v_celiac = (u_AA-u_celiac)/R_celiac;
    // Superior mesentery branch of the aorta
    var q_supMes: litre {init: 0.1};
    var q_supMes_us: litre {init: 0.06};
    var u_supMes: kPa;
    var E_supMes: kPa_per_L {init: 400};
    var z_supMes: meter {init: 0.20};
    ode(q_supMes, t) = v_supMes-v_pancreas2-v_intestine1-v_colon1;
    u_supMes = E_supMes*(q_supMes-q_supMes_us);
    var v_supMes: L_per_s;
    var R_supMes: kPa_s_per_L {init: 100};
    v_supMes = (u_AA-u_supMes)/R_supMes;
    // Inferior mesentery branch of the aorta
    var v_infMes: L_per_s;
    var R_infMes: kPa_s_per_L {init: 100};
    v_infMes = (u_AA-u_colon)/R_infMes;
    // Stomach
    var q_stomach: litre {init: 0.1};
    var q_stomach_us: litre {init: 0.06};
    var u_stomach: kPa;
    var E_stomach: kPa_per_L {init: 100};
    var z_stomach: meter {init: 0.20};
    ode(q_stomach, t) = v_stomach1-v_stomach2;
    u_stomach = E_stomach*(q_stomach-q_stomach_us);
    var v_stomach1: L_per_s;
    var v_stomach2: L_per_s;
    var R_stomach1: kPa_s_per_L {init: 100};
    var R_stomach2: kPa_s_per_L {init: 2400};
    v_stomach1 = (u_celiac-u_stomach)/R_stomach1;
    v_stomach2 = (u_stomach-u_portalVein)/R_stomach2;
    // Spleen
    var q_spleen: litre {init: 0.1};
    var q_spleen_us: litre {init: 0.06};
    var u_spleen: kPa;
    var E_spleen: kPa_per_L {init: 100};
    var z_spleen: meter {init: 0.20};
    ode(q_spleen, t) = v_spleen1-v_spleen2;
    u_spleen = E_colon*(q_spleen-q_spleen_us);
    var v_spleen1: L_per_s;
    var v_spleen2: L_per_s;
    var R_spleen1: kPa_s_per_L {init: 100};
    var R_spleen2: kPa_s_per_L {init: 3000};
    v_spleen1 = (u_celiac-u_spleen)/R_spleen1;
    v_spleen2 = (u_spleen-u_portalVein)/R_spleen2;
    // Pancreas
    var q_pancreas: litre {init: 0.1};
    var q_pancreas_us: litre {init: 0.06};
    var u_pancreas: kPa;
    var E_pancreas: kPa_per_L {init: 100};
    var z_pancreas: meter {init: 0.20};
    ode(q_pancreas, t) = v_pancreas1+v_pancreas2-v_pancreas3;
    u_pancreas = E_pancreas*(q_pancreas-q_pancreas_us);
    var v_pancreas1: L_per_s;
    var v_pancreas2: L_per_s;
    var v_pancreas3: L_per_s;
    var R_pancreas1: kPa_s_per_L {init: 100};
    var R_pancreas2: kPa_s_per_L {init: 100};
    var R_pancreas3: kPa_s_per_L {init: 4000};
    v_pancreas1 = (u_celiac-u_pancreas)/R_pancreas1;
    v_pancreas2 = (u_supMes-u_pancreas)/R_pancreas2;
    v_pancreas3 = (u_pancreas-u_portalVein)/R_pancreas3;
    // Intestine
    var q_intestine: litre {init: 0.1};
    var q_intestine_us: litre {init: 0.06};
    var u_intestine: kPa;
    var E_intestine: kPa_per_L {init: 100};
    var z_: meter {init: 0.20};
    ode(q_intestine, t) = v_intestine1-v_intestine2;
    u_intestine = E_intestine*(q_intestine-q_intestine_us);
    var v_intestine1: L_per_s;
    var v_intestine2: L_per_s;
    var R_intestine1: kPa_s_per_L {init: 100};
    var R_intestine2: kPa_s_per_L {init: 1200};
    v_intestine1 = (u_supMes-u_intestine)/R_intestine1;
    v_intestine2 = (u_intestine-u_portalVein)/R_intestine2;
    // Colon
    var q_colon: litre {init: 0.1};
    var q_colon_us: litre {init: 0.06};
    var u_colon: kPa;
    var E_colon: kPa_per_L {init: 100};
    var z_colon: meter {init: 0.20};
    ode(q_colon, t) = v_colon1+v_infMes-v_colon2;
    u_colon = E_colon*(q_colon-q_colon_us);
    var v_colon1: L_per_s;
    var v_colon2: L_per_s;
    var R_colon1: kPa_s_per_L {init: 100};
    var R_colon2: kPa_s_per_L {init: 2000};
    v_colon1 = (u_supMes-u_colon)/R_colon1;
    v_colon2 = (u_colon-u_portalVein)/R_colon2;
    // Portal vein
    var q_portalVein: litre {init: 0.1};
    var q_portalVein_us: litre {init: 0.06};
    var u_portalVein: kPa;
    var E_portalVein: kPa_per_L {init: 50};
    var z_portalVein: meter {init: 0.20};
    ode(q_portalVein, t) = v_stomach2+v_spleen2+v_pancreas3+v_intestine2+v_colon2-v_portalVein;
    u_portalVein = E_portalVein*(q_portalVein-q_portalVein_us);
    var v_portalVein: L_per_s;
    var R_portalVein: kPa_s_per_L {init: 100};
    v_portalVein = (u_portalVein-u_liver)/R_portalVein;
    // Liver
    var q_liver: litre {init: 0.2};
    var q_liver_us: litre {init: 0.06};
    var u_liver: kPa;
    var E_liver: kPa_per_L {init: 10};
    var z_liver: meter {init: -0.50};
    ode(q_liver, t) = v_liver1+v_portalVein-v_liver2;
    u_liver = E_liver*(q_liver-q_liver_us);
    var v_liver1: L_per_s;
    var v_liver2: L_per_s;
    var R_liver1: kPa_s_per_L {init: 800};
    var R_liver2: kPa_s_per_L {init: 1};
    v_liver1 = (u_celiac-u_liver)/R_liver1;
    v_liver2 = (u_liver-u_RA)/R_liver2;
    // Kidneys. Renal 1 -> Glomerular bed (gCap) -> Renal 2 -> Peritubular bed (pCap) -> Renal 3
    var q_lGlomerulus: litre {init: 0.1};
    var q_rGlomerulus: litre {init: 0.1};
    var q_lPeritubular: litre {init: 0.1};
    var q_rPeritubular: litre {init: 0.1};
    var q_lGlomerulus_us: litre {init: 0.06};
    var q_rGlomerulus_us: litre {init: 0.06};
    var q_lPeritubular_us: litre {init: 0.06};
    var q_rPeritubular_us: litre {init: 0.06};
    var u_lGlomerulus: kPa;
    var u_rGlomerulus: kPa;
    var u_lPeritubular: kPa;
    var u_rPeritubular: kPa;
    var E_lGlomerulus: kPa_per_L {init: 150};
    var E_rGlomerulus: kPa_per_L {init: 150};
    var E_lPeritubular: kPa_per_L {init: 50};
    var E_rPeritubular: kPa_per_L {init: 50};
    var z_kidney: meter {init: -0.25};
    ode(q_lGlomerulus, t) = v_lRenal1-v_lRenal2;
    ode(q_rGlomerulus, t) = v_lRenal1-v_lRenal2;
    ode(q_lPeritubular, t) = v_lRenal2-v_lRenal3;
    ode(q_rPeritubular, t) = v_lRenal2-v_lRenal3;
    u_lGlomerulus = E_lGlomerulus*(q_lGlomerulus-q_lGlomerulus_us);
    u_rGlomerulus = E_rGlomerulus*(q_rGlomerulus-q_rGlomerulus_us);
    u_lPeritubular = E_lPeritubular*(q_lPeritubular-q_lPeritubular_us);
    u_rPeritubular = E_rPeritubular*(q_rPeritubular-q_rPeritubular_us);
    var v_lRenal1: L_per_s;
    var v_rRenal1: L_per_s;
    var v_lRenal2: L_per_s;
    var v_rRenal2: L_per_s;
    var v_lRenal3: L_per_s;
    var v_rRenal3: L_per_s;
    var R_lRenal1: kPa_s_per_L {init: 100};
    var R_rRenal1: kPa_s_per_L {init: 100};
    var R_lRenal2: kPa_s_per_L {init: 2000};
    var R_rRenal2: kPa_s_per_L {init: 2000};
    var R_lRenal3: kPa_s_per_L {init: 1};
    var R_rRenal3: kPa_s_per_L {init: 1};
    v_lRenal1 = (u_AA-u_lGlomerulus)/R_lRenal1;
    v_rRenal1 = (u_AA-u_rGlomerulus)/R_rRenal1;
    v_lRenal2 = (u_lGlomerulus-u_lPeritubular)/R_lRenal2;
    v_rRenal2 = (u_rGlomerulus-u_rPeritubular)/R_rRenal2;
    v_lRenal3 = (u_lPeritubular-u_RA)/R_lRenal3;
    v_rRenal3 = (u_rPeritubular-u_RA)/R_rRenal3;
    // Muscle in torso
    var q_musTorso: litre {init: 0.2};
    var q_musTorsoVein: litre {init: 0.2};
    var q_musTorso_us: litre {init: 0.12};
    var q_musTorsoVein_us: litre {init: 0.12};
    var u_musTorso: kPa;
    var u_musTorsoVein: kPa;
    var E_musTorso: kPa_per_L {init: 60};
    var E_musTorsoVein: kPa_per_L {init: 10};
    var z_musTorso: meter {init: -0.50};
    ode(q_musTorso, t) = v_musTorso1-v_musTorso2;
    u_musTorso = E_musTorso*(q_musTorso-q_musTorso_us);
    ode(q_musTorsoVein, t) = v_musTorso2-v_musTorso3;
    u_musTorsoVein = E_musTorsoVein*(q_musTorsoVein-q_musTorsoVein_us);
    var v_musTorso1: L_per_s;
    var v_musTorso2: L_per_s;
    var v_musTorso3: L_per_s;
    var R_musTorso1: kPa_s_per_L {init: 100};
    var R_musTorso2: kPa_s_per_L {init: 1000};
    var R_musTorso3: kPa_s_per_L {init: 1};
    v_musTorso1 = (u_AA-u_musTorso)/R_musTorso1;
    v_musTorso2 = (u_musTorso-u_musTorsoVein)/R_musTorso2;
    v_musTorso3 = (u_musTorsoVein-u_RA)/R_musTorso3;
    // Left arm
    var q_lArm: litre {init: 0.1};
    var q_lArmVein: litre {init: 0.1};
    var q_lArm_us: litre {init: 0.06};
    var q_lArmVein_us: litre {init: 0.06};
    var u_lArm: kPa;
    var u_lArmVein: kPa;
    var E_lArm: kPa_per_L {init: 150};
    var E_lArmVein: kPa_per_L {init: 60};
    var z_lArm: meter {init: -0.50};
    ode(q_lArm, t) = v_lArm1-v_lArm2;
    u_lArm = E_lArm*(q_lArm-q_lArm_us);
    ode(q_lArmVein, t) = v_lArm2-v_lArm3;
    u_lArmVein = E_lArmVein*(q_lArmVein-q_lArmVein_us);
    var v_lArm1: L_per_s;
    var v_lArm2: L_per_s;
    var v_lArm3: L_per_s;
    var R_lArm1: kPa_s_per_L {init: 100};
    var R_lArm2: kPa_s_per_L {init: 6000};
    var R_lArm3: kPa_s_per_L {init: 1};
    v_lArm1 = (u_AA-u_lArm)/R_lArm1;
    v_lArm2 = (u_lArm-u_lArmVein)/R_lArm2;
    v_lArm3 = (u_lArmVein-u_RA)/R_lArm3;
    // Right arm
    var q_rArm: litre {init: 0.1};
    var q_rArmVein: litre {init: 0.1};
    var q_rArm_us: litre {init: 0.06};
    var q_rArmVein_us: litre {init: 0.06};
    var u_rArm: kPa;
    var u_rArmVein: kPa;
    var E_rArm: kPa_per_L {init: 150};
    var E_rArmVein: kPa_per_L {init: 60};
    var z_rArm: meter {init: -0.50};
    ode(q_rArm, t) = v_rArm1-v_rArm2;
    u_rArm = E_rArm*(q_rArm-q_rArm_us);
    ode(q_rArmVein, t) = v_rArm2-v_rArm3;
    u_rArmVein = E_rArmVein*(q_rArmVein-q_rArm_us);
    var v_rArm1: L_per_s;
    var v_rArm2: L_per_s;
    var v_rArm3: L_per_s;
    var R_rArm1: kPa_s_per_L {init: 100};
    var R_rArm2: kPa_s_per_L {init: 6000};
    var R_rArm3: kPa_s_per_L {init: 1};
    v_rArm1 = (u_AA-u_rArm)/R_rArm1;
    v_rArm2 = (u_rArm-u_rArmVein)/R_rArm2;
    v_rArm3 = (u_rArmVein-u_RA)/R_rArm3;
    // Left leg
    var q_lLeg: litre {init: 0.1};
    var q_lLegVein: litre {init: 0.1};
    var q_lLeg_us: litre {init: 0.06};
    var q_lLegVein_us: litre {init: 0.06};
    var u_lLeg: kPa;
    var u_lLegVein: kPa;
    var E_lLeg: kPa_per_L {init: 150};
    var E_lLegVein: kPa_per_L {init: 60};
    var z_lLeg: meter {init: -0.50};
    ode(q_lLeg, t) = v_lLeg1-v_lLeg2;
    u_lLeg = E_lLeg*(q_lLeg-q_lLeg_us);
    ode(q_lLegVein, t) = v_lLeg2-v_lLeg3;
    u_lLegVein = E_lLegVein*(q_lLegVein-q_lLeg_us);
    var v_lLeg1: L_per_s;
    var v_lLeg2: L_per_s;
    var v_lLeg3: L_per_s;
    var R_lLeg1: kPa_s_per_L {init: 100};
    var R_lLeg2: kPa_s_per_L {init: 4000};
    var R_lLeg3: kPa_s_per_L {init: 1};
    v_lLeg1 = (u_AA-u_lLeg)/R_lLeg1;
    v_lLeg2 = (u_lLeg-u_lLegVein)/R_lLeg2;
    v_lLeg3 = (u_lLegVein-u_RA)/R_lLeg3;
    // Right leg
    var q_rLeg: litre {init: 0.1};
    var q_rLegVein: litre {init: 0.1};
    var q_rLeg_us: litre {init: 0.06};
    var q_rLegVein_us: litre {init: 0.06};
    var u_rLeg: kPa;
    var u_rLegVein: kPa;
    var E_rLeg: kPa_per_L {init: 150};
    var E_rLegVein: kPa_per_L {init: 60};
    var z_rLeg: meter {init: -0.50};
    ode(q_rLeg, t) = v_rLeg1-v_rLeg2;
    u_rLeg = E_rLeg*(q_rLeg-q_rLeg_us);
    ode(q_rLegVein, t) = v_rLeg2-v_rLeg3;
    u_rLegVein = E_rLegVein*(q_rLegVein-q_rLeg_us);
    var v_rLeg1: L_per_s;
    var v_rLeg2: L_per_s;
    var v_rLeg3: L_per_s;
    var R_rLeg1: kPa_s_per_L {init: 100};
    var R_rLeg2: kPa_s_per_L {init: 4000};
    var R_rLeg3: kPa_s_per_L {init: 1};
    v_rLeg1 = (u_AA-u_rLeg)/R_rLeg1;
    v_rLeg2 = (u_rLeg-u_rLegVein)/R_rLeg2;
    v_rLeg3 = (u_rLegVein-u_RA)/R_rLeg3;
    // Total volumes of blood in torso, brain, limbs and combination
    var q_heartTot: litre;
    var q_lungTot: litre;
    var q_renalTot: litre;
    var q_gutTot: litre;
    var q_brainTot: litre;
    var q_limbTot: litre;
    var q_Blood: litre;
    q_heartTot = q_LV+q_RV+q_LA+q_RA+q_AA+q_PulmA;
    q_lungTot = q_lULobeC+q_lInterlobarA+q_lLLobeA+q_rULobeC+q_rInterlobarA+q_rLLobeA+q_PulmV;
    q_renalTot = q_lGlomerulus+q_rGlomerulus+q_lPeritubular+q_rPeritubular;
    q_gutTot = q_celiac+q_supMes+q_stomach+q_spleen+q_pancreas+q_intestine+q_colon+q_portalVein+q_liver+q_musTorso+q_musTorsoVein;
    q_brainTot = q_brain+q_brainVein;
    q_limbTot = q_lArm+q_lArmVein+q_rArm+q_rArmVein+q_lLeg+q_lLegVein+q_rLeg+q_rLegVein;
    q_Blood = q_heartTot+q_lungTot+q_renalTot+q_gutTot+q_brainTot+q_limbTot;
  enddef;
enddef;
