<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="my_model" id="b4da55">
  <units name="dim" id="b4da56">
    <unit units="dimensionless" id="b4da57"/>
  </units>
  <units name="per_s" id="b4da58">
    <unit exponent="-1" units="second" id="b4da59"/>
  </units>
  <units name="L_per_s" id="b4da5a">
    <unit units="litre" id="b4da5b"/>
    <unit exponent="-1" units="second" id="b4da5c"/>
  </units>
  <units name="kPa" id="b4da5d">
    <unit units="joule" id="b4da5e"/>
    <unit exponent="-1" units="litre" id="b4da5f"/>
  </units>
  <units name="kPa_s_per_L" id="b4da60">
    <unit units="kPa" id="b4da61"/>
    <unit units="second" id="b4da62"/>
    <unit exponent="-1" units="litre" id="b4da63"/>
  </units>
  <units name="kPa_per_L" id="b4da64">
    <unit units="kPa" id="b4da65"/>
    <unit exponent="-1" units="litre" id="b4da66"/>
  </units>
  <units name="L_per_s_per_kPa" id="b4da67">
    <unit units="L_per_s" id="b4da68"/>
    <unit exponent="-1" units="kPa" id="b4da69"/>
  </units>
  <units name="per_mol" id="b4da6a">
    <unit exponent="-1" units="mole" id="b4da6b"/>
  </units>
  <units name="mol_per_s" id="b4da6c">
    <unit units="mole" id="b4da6d"/>
    <unit exponent="-1" units="second" id="b4da6e"/>
  </units>
  <units name="mol_per_L" id="b4da6f">
    <unit units="mole" id="b4da70"/>
    <unit exponent="-1" units="litre" id="b4da71"/>
  </units>
  <units name="L_per_mol" id="b4da72">
    <unit units="litre" id="b4da73"/>
    <unit exponent="-1" units="mole" id="b4da74"/>
  </units>
  <units name="mM" id="b4da75">
    <unit prefix="milli" units="mol_per_L" id="b4da76"/>
  </units>
  <units name="J_per_mol" id="b4da77">
    <unit units="joule" id="b4da78"/>
    <unit exponent="-1" units="mole" id="b4da79"/>
  </units>
  <units name="J_per_C" id="b4da7a">
    <unit units="joule" id="b4da7b"/>
    <unit exponent="-1" units="coulomb" id="b4da7c"/>
  </units>
  <units name="C_per_mol" id="b4da7d">
    <unit units="coulomb" id="b4da7e"/>
    <unit exponent="-1" units="mole" id="b4da7f"/>
  </units>
  <component name="main" id="b4da80">
    <variable name="t" units="second" id="b4da81"/>
    <variable name="RT" units="J_per_mol" initial_value="2.5e3" id="b4da82"/>
    <variable name="F" units="C_per_mol" initial_value="0.965e5" id="b4da83"/>
    <variable name="q_ac_W" units="litre" initial_value="1" id="q-ac-W"/>
    <variable name="q_vc_W" units="litre" initial_value="2" id="b4da84"/>
    <variable name="q_gi_W" units="litre" initial_value="1" id="b4da85"/>
    <variable name="q_pt_W" units="litre" initial_value="0.1" id="b4da86"/>
    <variable name="q_giEpi_W" units="litre" initial_value="0.5" id="b4da87"/>
    <variable name="q_ptEpi_W" units="litre" initial_value="0.5" id="b4da88"/>
    <variable name="q_tot_W" units="litre" id="b4da89"/>
    <variable name="q_vc_Na" units="mole" initial_value="0.84" id="b4da8a"/>
    <variable name="q_gi_Na" units="mole" initial_value="0.1" id="b4da8b"/>
    <variable name="q_pt_Na" units="mole" initial_value="0.01" id="b4da8c"/>
    <variable name="q_giEpi_Na" units="mole" initial_value="0.012" id="b4da8d"/>
    <variable name="q_ptEpi_Na" units="mole" initial_value="0.012" id="b4da8e"/>
    <variable name="q_vc_K" units="mole" initial_value="0.03" id="b4da8f"/>
    <variable name="q_giEpi_K" units="mole" initial_value="0.012" id="b4da90"/>
    <variable name="q_ptEpi_K" units="mole" initial_value="0.012" id="b4da91"/>
    <variable name="q_tot_Na" units="mole" id="b4da92"/>
    <variable name="c_vc_Na" units="mol_per_L" id="b4da93"/>
    <variable name="c_gi_Na" units="mol_per_L" id="b4da94"/>
    <variable name="c_pt_Na" units="mol_per_L" id="b4da95"/>
    <variable name="c_giEpi_Na" units="mol_per_L" id="b4da96"/>
    <variable name="c_ptEpi_Na" units="mol_per_L" id="b4da97"/>
    <variable name="C_vc_Na" units="mM" id="b4da98"/>
    <variable name="C_gi_Na" units="mM" id="b4da99"/>
    <variable name="C_pt_Na" units="mM" id="b4da9a"/>
    <variable name="C_giEpi_Na" units="mM" id="b4da9b"/>
    <variable name="C_ptEpi_Na" units="mM" id="b4da9c"/>
    <variable name="v_lv_W" units="L_per_s" initial_value="0.1" id="b4da9d"/>
    <variable name="v_in_W" units="L_per_s" initial_value="0" id="b4da9e"/>
    <variable name="v_out1_W" units="L_per_s" initial_value="0" id="b4da9f"/>
    <variable name="v_out2_W" units="L_per_s" initial_value="0" id="b4daa0"/>
    <variable name="v_gl_W" units="L_per_s" id="b4daa1"/>
    <variable name="v_gi_W" units="L_per_s" id="b4daa2"/>
    <variable name="v_pt_W" units="L_per_s" id="b4daa3"/>
    <variable name="v_cc_W" units="L_per_s" id="b4daa4"/>
    <variable name="v_in_Na" units="mol_per_s" initial_value="1.16e-6" id="b4daa5"/>
    <variable name="v_out1_Na" units="mol_per_s" initial_value="0" id="b4daa6"/>
    <variable name="v_out2_Na" units="mol_per_s" initial_value="1.16e-6" id="b4daa7"/>
    <variable name="v_gl_Na" units="mol_per_s" id="b4daa8"/>
    <variable name="v_gi_Na" units="mol_per_s" id="b4daa9"/>
    <variable name="v_pt_Na" units="mol_per_s" id="b4daaa"/>
    <variable name="v_giEpi_NKE" units="mol_per_s" id="b4daab"/>
    <variable name="v_ptEpi_NKE" units="mol_per_s" id="b4daac"/>
    <variable name="u_vc_W" units="kPa" id="b4daad"/>
    <variable name="u_ac_W" units="kPa" id="b4daae"/>
    <variable name="u_pt_W" units="kPa" id="b4daaf"/>
    <variable name="u_vc_osmotic" units="kPa" id="b4dab0"/>
    <variable name="u_gi_osmotic" units="kPa" id="b4dab1"/>
    <variable name="u_pt_osmotic" units="kPa" id="b4dab2"/>
    <variable name="u_giEpi_e" units="J_per_C" initial_value="-0.040" id="b4dab3"/>
    <variable name="u_ptEpi_e" units="J_per_C" initial_value="-0.040" id="b4dab4"/>
    <variable name="k_gi_W" units="L_per_s_per_kPa" initial_value="1" id="b4dab5"/>
    <variable name="k_pt_W" units="L_per_s_per_kPa" initial_value="0" id="b4dab6"/>
    <variable name="k_gl_W" units="L_per_s_per_kPa" initial_value="1" id="b4dab7"/>
    <variable name="k_cc_W" units="L_per_s_per_kPa" initial_value="1" id="b4dab8"/>
    <variable name="kK_gi_Na" units="per_s" initial_value="1" id="b4dab9"/>
    <variable name="kK_pt_Na" units="per_s" initial_value="1" id="b4daba"/>
    <variable name="kK_gl_Na" units="per_s" initial_value="1" id="b4dabb"/>
    <variable name="k_giEpi_NKE" units="mol_per_s" initial_value="1e4" id="b4dabc"/>
    <variable name="k_ptEpi_NKE" units="mol_per_s" initial_value="1e5" id="b4dabd"/>
    <variable name="K_Na" units="L_per_mol" initial_value="1" id="b4dabe"/>
    <variable name="K_K" units="L_per_mol" initial_value="1" id="b4dabf"/>
    <variable name="E_vc" units="joule" initial_value="6e1" id="b4dac0"/>
    <variable name="E_ac" units="joule" initial_value="6e1" id="b4dac1"/>
    <variable name="E_pt" units="joule" initial_value="1" id="b4dac2"/>
    <variable name="U_ac_W" units="litre" initial_value="0.5" id="b4dac3"/>
    <variable name="U_vc_W" units="litre" initial_value="1.5" id="b4dac4"/>
    <variable name="U_pt_W" units="litre" initial_value="0.1" id="b4dac5"/>
    <variable name="L_ac_W" units="litre" initial_value="1.5" id="b4dac6"/>
    <variable name="L_vc_W" units="litre" initial_value="2.5" id="b4dac7"/>
    <variable name="L_pt_W" units="litre" initial_value="1" id="b4dac8"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_gi_W</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <minus/>
            <ci>v_in_W</ci>
            <apply>
              <times/>
              <ci>RT</ci>
              <ci>k_gi_W</ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <ci>q_vc_Na</ci>
                  <ci>q_vc_W</ci>
                </apply>
                <apply>
                  <divide/>
                  <ci>q_gi_Na</ci>
                  <ci>q_gi_W</ci>
                </apply>
              </apply>
            </apply>
          </apply>
          <ci>v_out1_W</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_pt_W</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>k_gl_W</ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>E_ac</ci>
                    <apply>
                      <minus/>
                      <ci>q_ac_W</ci>
                      <ci>U_ac_W</ci>
                    </apply>
                  </apply>
                  <apply>
                    <power/>
                    <apply>
                      <minus/>
                      <ci>L_ac_W</ci>
                      <ci>q_ac_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                </apply>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>E_pt</ci>
                    <apply>
                      <minus/>
                      <ci>q_pt_W</ci>
                      <ci>U_pt_W</ci>
                    </apply>
                  </apply>
                  <apply>
                    <power/>
                    <apply>
                      <minus/>
                      <ci>L_pt_W</ci>
                      <ci>q_pt_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>RT</ci>
              <ci>k_pt_W</ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <ci>q_vc_Na</ci>
                  <ci>q_vc_W</ci>
                </apply>
                <apply>
                  <divide/>
                  <ci>q_pt_Na</ci>
                  <ci>q_pt_W</ci>
                </apply>
              </apply>
            </apply>
          </apply>
          <ci>v_out2_W</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_vc_W</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci>k_cc_W</ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>E_ac</ci>
                    <apply>
                      <minus/>
                      <ci>q_ac_W</ci>
                      <ci>U_ac_W</ci>
                    </apply>
                  </apply>
                  <apply>
                    <power/>
                    <apply>
                      <minus/>
                      <ci>L_ac_W</ci>
                      <ci>q_ac_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                </apply>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>E_vc</ci>
                    <apply>
                      <minus/>
                      <ci>q_vc_W</ci>
                      <ci>U_vc_W</ci>
                    </apply>
                  </apply>
                  <apply>
                    <power/>
                    <apply>
                      <minus/>
                      <ci>L_vc_W</ci>
                      <ci>q_vc_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>RT</ci>
              <ci>k_gi_W</ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <ci>q_vc_Na</ci>
                  <ci>q_vc_W</ci>
                </apply>
                <apply>
                  <divide/>
                  <ci>q_gi_Na</ci>
                  <ci>q_gi_W</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>RT</ci>
              <ci>k_pt_W</ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <ci>q_vc_Na</ci>
                  <ci>q_vc_W</ci>
                </apply>
                <apply>
                  <divide/>
                  <ci>q_pt_Na</ci>
                  <ci>q_pt_W</ci>
                </apply>
              </apply>
            </apply>
          </apply>
          <ci>v_lv_W</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_ac_W</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <ci>v_lv_W</ci>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci>k_cc_W</ci>
                  <ci>E_vc</ci>
                  <apply>
                    <minus/>
                    <ci>q_vc_W</ci>
                    <ci>U_vc_W</ci>
                  </apply>
                </apply>
                <apply>
                  <power/>
                  <apply>
                    <minus/>
                    <ci>L_vc_W</ci>
                    <ci>q_vc_W</ci>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                </apply>
              </apply>
            </apply>
            <apply>
              <divide/>
              <apply>
                <times/>
                <apply>
                  <plus/>
                  <ci>k_gl_W</ci>
                  <ci>k_cc_W</ci>
                </apply>
                <ci>E_ac</ci>
                <apply>
                  <minus/>
                  <ci>q_ac_W</ci>
                  <ci>U_ac_W</ci>
                </apply>
              </apply>
              <apply>
                <power/>
                <apply>
                  <minus/>
                  <ci>L_ac_W</ci>
                  <ci>q_ac_W</ci>
                </apply>
                <cn cellml:units="dimensionless">2</cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>k_gl_W</ci>
              <ci>E_pt</ci>
              <apply>
                <minus/>
                <ci>q_pt_W</ci>
                <ci>U_pt_W</ci>
              </apply>
            </apply>
            <apply>
              <power/>
              <apply>
                <minus/>
                <ci>L_pt_W</ci>
                <ci>q_pt_W</ci>
              </apply>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_gi_Na</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <minus/>
            <ci>v_in_Na</ci>
            <apply>
              <times/>
              <ci>kK_gi_Na</ci>
              <apply>
                <minus/>
                <ci>q_gi_Na</ci>
                <ci>q_giEpi_Na</ci>
              </apply>
            </apply>
          </apply>
          <ci>v_out1_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_giEpi_Na</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>kK_gi_Na</ci>
            <apply>
              <minus/>
              <ci>q_gi_Na</ci>
              <ci>q_giEpi_Na</ci>
            </apply>
          </apply>
          <apply>
            <divide/>
            <apply>
              <times/>
              <cn cellml:units="dim">3</cn>
              <ci>k_giEpi_NKE</ci>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_Na</ci>
                        <ci>q_giEpi_Na</ci>
                      </apply>
                      <ci>q_giEpi_W</ci>
                    </apply>
                    <cn cellml:units="dim">3</cn>
                  </apply>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_K</ci>
                        <ci>q_vc_K</ci>
                      </apply>
                      <ci>q_vc_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                </apply>
                <apply>
                  <times/>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_Na</ci>
                        <ci>q_vc_Na</ci>
                      </apply>
                      <ci>q_vc_W</ci>
                    </apply>
                    <cn cellml:units="dim">3</cn>
                  </apply>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_K</ci>
                        <ci>q_giEpi_K</ci>
                      </apply>
                      <ci>q_giEpi_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                  <apply>
                    <exp/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <cn cellml:units="dim">2</cn>
                        <ci>F</ci>
                        <ci>u_giEpi_e</ci>
                      </apply>
                      <ci>RT</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <apply>
                <plus/>
                <cn cellml:units="dim">1</cn>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_Na</ci>
                      <ci>q_giEpi_Na</ci>
                    </apply>
                    <ci>q_giEpi_W</ci>
                  </apply>
                  <cn cellml:units="dim">3</cn>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn cellml:units="dim">1</cn>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_Na</ci>
                      <ci>q_vc_Na</ci>
                    </apply>
                    <ci>q_vc_W</ci>
                  </apply>
                  <cn cellml:units="dim">3</cn>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn cellml:units="dim">1</cn>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_K</ci>
                      <ci>q_vc_K</ci>
                    </apply>
                    <ci>q_vc_W</ci>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn cellml:units="dim">1</cn>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_K</ci>
                      <ci>q_giEpi_K</ci>
                    </apply>
                    <ci>q_giEpi_W</ci>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_pt_Na</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>kK_gl_Na</ci>
              <apply>
                <minus/>
                <ci>q_vc_Na</ci>
                <ci>q_pt_Na</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>kK_pt_Na</ci>
              <apply>
                <minus/>
                <ci>q_pt_Na</ci>
                <ci>q_ptEpi_Na</ci>
              </apply>
            </apply>
          </apply>
          <ci>v_out2_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_ptEpi_Na</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>kK_pt_Na</ci>
            <apply>
              <minus/>
              <ci>q_pt_Na</ci>
              <ci>q_ptEpi_Na</ci>
            </apply>
          </apply>
          <apply>
            <divide/>
            <apply>
              <times/>
              <cn cellml:units="dim">3</cn>
              <ci>k_ptEpi_NKE</ci>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_Na</ci>
                        <ci>q_ptEpi_Na</ci>
                      </apply>
                      <ci>q_ptEpi_W</ci>
                    </apply>
                    <cn cellml:units="dim">3</cn>
                  </apply>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_K</ci>
                        <ci>q_vc_K</ci>
                      </apply>
                      <ci>q_vc_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                </apply>
                <apply>
                  <times/>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_Na</ci>
                        <ci>q_vc_Na</ci>
                      </apply>
                      <ci>q_vc_W</ci>
                    </apply>
                    <cn cellml:units="dim">3</cn>
                  </apply>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_K</ci>
                        <ci>q_ptEpi_K</ci>
                      </apply>
                      <ci>q_ptEpi_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                  <apply>
                    <exp/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <cn cellml:units="dim">2</cn>
                        <ci>F</ci>
                        <ci>u_ptEpi_e</ci>
                      </apply>
                      <ci>RT</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <apply>
                <plus/>
                <cn cellml:units="dim">1</cn>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_Na</ci>
                      <ci>q_ptEpi_Na</ci>
                    </apply>
                    <ci>q_ptEpi_W</ci>
                  </apply>
                  <cn cellml:units="dim">3</cn>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn cellml:units="dim">1</cn>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_Na</ci>
                      <ci>q_vc_Na</ci>
                    </apply>
                    <ci>q_vc_W</ci>
                  </apply>
                  <cn cellml:units="dim">3</cn>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn cellml:units="dim">1</cn>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_K</ci>
                      <ci>q_vc_K</ci>
                    </apply>
                    <ci>q_vc_W</ci>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                </apply>
              </apply>
              <apply>
                <plus/>
                <cn cellml:units="dim">1</cn>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_K</ci>
                      <ci>q_ptEpi_K</ci>
                    </apply>
                    <ci>q_ptEpi_W</ci>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_vc_Na</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <cn cellml:units="dim">3</cn>
                <ci>k_giEpi_NKE</ci>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <apply>
                      <power/>
                      <apply>
                        <divide/>
                        <apply>
                          <times/>
                          <ci>K_Na</ci>
                          <ci>q_giEpi_Na</ci>
                        </apply>
                        <ci>q_giEpi_W</ci>
                      </apply>
                      <cn cellml:units="dim">3</cn>
                    </apply>
                    <apply>
                      <power/>
                      <apply>
                        <divide/>
                        <apply>
                          <times/>
                          <ci>K_K</ci>
                          <ci>q_vc_K</ci>
                        </apply>
                        <ci>q_vc_W</ci>
                      </apply>
                      <cn cellml:units="dimensionless">2</cn>
                    </apply>
                  </apply>
                  <apply>
                    <times/>
                    <apply>
                      <power/>
                      <apply>
                        <divide/>
                        <apply>
                          <times/>
                          <ci>K_Na</ci>
                          <ci>q_vc_Na</ci>
                        </apply>
                        <ci>q_vc_W</ci>
                      </apply>
                      <cn cellml:units="dim">3</cn>
                    </apply>
                    <apply>
                      <power/>
                      <apply>
                        <divide/>
                        <apply>
                          <times/>
                          <ci>K_K</ci>
                          <ci>q_giEpi_K</ci>
                        </apply>
                        <ci>q_giEpi_W</ci>
                      </apply>
                      <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <apply>
                      <exp/>
                      <apply>
                        <divide/>
                        <apply>
                          <times/>
                          <cn cellml:units="dim">2</cn>
                          <ci>F</ci>
                          <ci>u_giEpi_e</ci>
                        </apply>
                        <ci>RT</ci>
                      </apply>
                    </apply>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <apply>
                  <plus/>
                  <cn cellml:units="dim">1</cn>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_Na</ci>
                        <ci>q_giEpi_Na</ci>
                      </apply>
                      <ci>q_giEpi_W</ci>
                    </apply>
                    <cn cellml:units="dim">3</cn>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <cn cellml:units="dim">1</cn>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_Na</ci>
                        <ci>q_vc_Na</ci>
                      </apply>
                      <ci>q_vc_W</ci>
                    </apply>
                    <cn cellml:units="dim">3</cn>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <cn cellml:units="dim">1</cn>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_K</ci>
                        <ci>q_vc_K</ci>
                      </apply>
                      <ci>q_vc_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <cn cellml:units="dim">1</cn>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_K</ci>
                        <ci>q_giEpi_K</ci>
                      </apply>
                      <ci>q_giEpi_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <divide/>
              <apply>
                <times/>
                <cn cellml:units="dim">3</cn>
                <ci>k_ptEpi_NKE</ci>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <apply>
                      <power/>
                      <apply>
                        <divide/>
                        <apply>
                          <times/>
                          <ci>K_Na</ci>
                          <ci>q_ptEpi_Na</ci>
                        </apply>
                        <ci>q_ptEpi_W</ci>
                      </apply>
                      <cn cellml:units="dim">3</cn>
                    </apply>
                    <apply>
                      <power/>
                      <apply>
                        <divide/>
                        <apply>
                          <times/>
                          <ci>K_K</ci>
                          <ci>q_vc_K</ci>
                        </apply>
                        <ci>q_vc_W</ci>
                      </apply>
                      <cn cellml:units="dimensionless">2</cn>
                    </apply>
                  </apply>
                  <apply>
                    <times/>
                    <apply>
                      <power/>
                      <apply>
                        <divide/>
                        <apply>
                          <times/>
                          <ci>K_Na</ci>
                          <ci>q_vc_Na</ci>
                        </apply>
                        <ci>q_vc_W</ci>
                      </apply>
                      <cn cellml:units="dim">3</cn>
                    </apply>
                    <apply>
                      <power/>
                      <apply>
                        <divide/>
                        <apply>
                          <times/>
                          <ci>K_K</ci>
                          <ci>q_ptEpi_K</ci>
                        </apply>
                        <ci>q_ptEpi_W</ci>
                      </apply>
                      <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <apply>
                      <exp/>
                      <apply>
                        <divide/>
                        <apply>
                          <times/>
                          <cn cellml:units="dim">2</cn>
                          <ci>F</ci>
                          <ci>u_ptEpi_e</ci>
                        </apply>
                        <ci>RT</ci>
                      </apply>
                    </apply>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <apply>
                  <plus/>
                  <cn cellml:units="dim">1</cn>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_Na</ci>
                        <ci>q_ptEpi_Na</ci>
                      </apply>
                      <ci>q_ptEpi_W</ci>
                    </apply>
                    <cn cellml:units="dim">3</cn>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <cn cellml:units="dim">1</cn>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_Na</ci>
                        <ci>q_vc_Na</ci>
                      </apply>
                      <ci>q_vc_W</ci>
                    </apply>
                    <cn cellml:units="dim">3</cn>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <cn cellml:units="dim">1</cn>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_K</ci>
                        <ci>q_vc_K</ci>
                      </apply>
                      <ci>q_vc_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <cn cellml:units="dim">1</cn>
                  <apply>
                    <power/>
                    <apply>
                      <divide/>
                      <apply>
                        <times/>
                        <ci>K_K</ci>
                        <ci>q_ptEpi_K</ci>
                      </apply>
                      <ci>q_ptEpi_W</ci>
                    </apply>
                    <cn cellml:units="dimensionless">2</cn>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>kK_gl_Na</ci>
            <apply>
              <minus/>
              <ci>q_vc_Na</ci>
              <ci>q_pt_Na</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <!-- Water pressures -->
      <apply>
        <eq/>
        <ci>u_vc_W</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>E_vc</ci>
            <apply>
              <minus/>
              <ci>q_vc_W</ci>
              <ci>U_vc_W</ci>
            </apply>
          </apply>
          <apply>
            <power/>
            <apply>
              <minus/>
              <ci>L_vc_W</ci>
              <ci>q_vc_W</ci>
            </apply>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>u_ac_W</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>E_ac</ci>
            <apply>
              <minus/>
              <ci>q_ac_W</ci>
              <ci>U_ac_W</ci>
            </apply>
          </apply>
          <apply>
            <power/>
            <apply>
              <minus/>
              <ci>L_ac_W</ci>
              <ci>q_ac_W</ci>
            </apply>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>u_pt_W</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>E_pt</ci>
            <apply>
              <minus/>
              <ci>q_pt_W</ci>
              <ci>U_pt_W</ci>
            </apply>
          </apply>
          <apply>
            <power/>
            <apply>
              <minus/>
              <ci>L_pt_W</ci>
              <ci>q_pt_W</ci>
            </apply>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
      <!-- Concentrations & Osmotic pressures-->
      <apply>
        <eq/>
        <ci>c_vc_Na</ci>
        <apply>
          <divide/>
          <ci>q_vc_Na</ci>
          <ci>q_vc_W</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>c_gi_Na</ci>
        <apply>
          <divide/>
          <ci>q_gi_Na</ci>
          <ci>q_gi_W</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>c_pt_Na</ci>
        <apply>
          <divide/>
          <ci>q_pt_Na</ci>
          <ci>q_pt_W</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>c_giEpi_Na</ci>
        <apply>
          <divide/>
          <ci>q_giEpi_Na</ci>
          <ci>q_giEpi_W</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>c_ptEpi_Na</ci>
        <apply>
          <divide/>
          <ci>q_ptEpi_Na</ci>
          <ci>q_ptEpi_W</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>C_vc_Na</ci>
        <apply>
          <times/>
          <cn type="e-notation" cellml:units="dim">1<sep/>3</cn>
          <ci>c_vc_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>C_gi_Na</ci>
        <apply>
          <times/>
          <cn type="e-notation" cellml:units="dim">1<sep/>3</cn>
          <ci>c_gi_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>C_pt_Na</ci>
        <apply>
          <times/>
          <cn type="e-notation" cellml:units="dim">1<sep/>3</cn>
          <ci>c_pt_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>C_giEpi_Na</ci>
        <apply>
          <times/>
          <cn type="e-notation" cellml:units="dim">1<sep/>3</cn>
          <ci>c_giEpi_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>C_ptEpi_Na</ci>
        <apply>
          <times/>
          <cn type="e-notation" cellml:units="dim">1<sep/>3</cn>
          <ci>c_ptEpi_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>u_gi_osmotic</ci>
        <apply>
          <times/>
          <ci>RT</ci>
          <ci>c_gi_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>u_vc_osmotic</ci>
        <apply>
          <times/>
          <ci>RT</ci>
          <ci>c_vc_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>u_pt_osmotic</ci>
        <apply>
          <times/>
          <ci>RT</ci>
          <ci>c_pt_Na</ci>
        </apply>
      </apply>
      <!-- Water fluxes -->
      <apply>
        <eq/>
        <ci>v_gi_W</ci>
        <apply>
          <times/>
          <ci>k_gi_W</ci>
          <apply>
            <minus/>
            <ci>u_vc_osmotic</ci>
            <ci>u_gi_osmotic</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_pt_W</ci>
        <apply>
          <times/>
          <ci>k_pt_W</ci>
          <apply>
            <minus/>
            <ci>u_vc_osmotic</ci>
            <ci>u_pt_osmotic</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_gl_W</ci>
        <apply>
          <times/>
          <ci>k_gl_W</ci>
          <apply>
            <minus/>
            <ci>u_ac_W</ci>
            <ci>u_pt_W</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_cc_W</ci>
        <apply>
          <times/>
          <ci>k_cc_W</ci>
          <apply>
            <minus/>
            <ci>u_ac_W</ci>
            <ci>u_vc_W</ci>
          </apply>
        </apply>
      </apply>
      <!-- Sodium fluxes-->
      <apply>
        <eq/>
        <ci>v_gl_Na</ci>
        <apply>
          <times/>
          <ci>kK_gl_Na</ci>
          <apply>
            <minus/>
            <ci>q_vc_Na</ci>
            <ci>q_pt_Na</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_gi_Na</ci>
        <apply>
          <times/>
          <ci>kK_gi_Na</ci>
          <apply>
            <minus/>
            <ci>q_gi_Na</ci>
            <ci>q_giEpi_Na</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_pt_Na</ci>
        <apply>
          <times/>
          <ci>kK_pt_Na</ci>
          <apply>
            <minus/>
            <ci>q_pt_Na</ci>
            <ci>q_ptEpi_Na</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_giEpi_NKE</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="dim">3</cn>
            <ci>k_giEpi_NKE</ci>
            <apply>
              <minus/>
              <apply>
                <times/>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_Na</ci>
                      <ci>q_giEpi_Na</ci>
                    </apply>
                    <ci>q_giEpi_W</ci>
                  </apply>
                  <cn cellml:units="dim">3</cn>
                </apply>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_K</ci>
                      <ci>q_vc_K</ci>
                    </apply>
                    <ci>q_vc_W</ci>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                </apply>
              </apply>
              <apply>
                <times/>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_Na</ci>
                      <ci>q_vc_Na</ci>
                    </apply>
                    <ci>q_vc_W</ci>
                  </apply>
                  <cn cellml:units="dim">3</cn>
                </apply>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_K</ci>
                      <ci>q_giEpi_K</ci>
                    </apply>
                    <ci>q_giEpi_W</ci>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                </apply>
                <apply>
                  <exp/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <cn cellml:units="dim">2</cn>
                      <ci>F</ci>
                      <ci>u_giEpi_e</ci>
                    </apply>
                    <ci>RT</ci>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <cn cellml:units="dim">1</cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>K_Na</ci>
                    <ci>q_giEpi_Na</ci>
                  </apply>
                  <ci>q_giEpi_W</ci>
                </apply>
                <cn cellml:units="dim">3</cn>
              </apply>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="dim">1</cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>K_Na</ci>
                    <ci>q_vc_Na</ci>
                  </apply>
                  <ci>q_vc_W</ci>
                </apply>
                <cn cellml:units="dim">3</cn>
              </apply>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="dim">1</cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>K_K</ci>
                    <ci>q_vc_K</ci>
                  </apply>
                  <ci>q_vc_W</ci>
                </apply>
                <cn cellml:units="dimensionless">2</cn>
              </apply>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="dim">1</cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>K_K</ci>
                    <ci>q_giEpi_K</ci>
                  </apply>
                  <ci>q_giEpi_W</ci>
                </apply>
                <cn cellml:units="dimensionless">2</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_ptEpi_NKE</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="dim">3</cn>
            <ci>k_ptEpi_NKE</ci>
            <apply>
              <minus/>
              <apply>
                <times/>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_Na</ci>
                      <ci>q_ptEpi_Na</ci>
                    </apply>
                    <ci>q_ptEpi_W</ci>
                  </apply>
                  <cn cellml:units="dim">3</cn>
                </apply>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_K</ci>
                      <ci>q_vc_K</ci>
                    </apply>
                    <ci>q_vc_W</ci>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                </apply>
              </apply>
              <apply>
                <times/>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_Na</ci>
                      <ci>q_vc_Na</ci>
                    </apply>
                    <ci>q_vc_W</ci>
                  </apply>
                  <cn cellml:units="dim">3</cn>
                </apply>
                <apply>
                  <power/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <ci>K_K</ci>
                      <ci>q_ptEpi_K</ci>
                    </apply>
                    <ci>q_ptEpi_W</ci>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                </apply>
                <apply>
                  <exp/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <cn cellml:units="dim">2</cn>
                      <ci>F</ci>
                      <ci>u_ptEpi_e</ci>
                    </apply>
                    <ci>RT</ci>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <cn cellml:units="dim">1</cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>K_Na</ci>
                    <ci>q_ptEpi_Na</ci>
                  </apply>
                  <ci>q_ptEpi_W</ci>
                </apply>
                <cn cellml:units="dim">3</cn>
              </apply>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="dim">1</cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>K_Na</ci>
                    <ci>q_vc_Na</ci>
                  </apply>
                  <ci>q_vc_W</ci>
                </apply>
                <cn cellml:units="dim">3</cn>
              </apply>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="dim">1</cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>K_K</ci>
                    <ci>q_vc_K</ci>
                  </apply>
                  <ci>q_vc_W</ci>
                </apply>
                <cn cellml:units="dimensionless">2</cn>
              </apply>
            </apply>
            <apply>
              <plus/>
              <cn cellml:units="dim">1</cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>K_K</ci>
                    <ci>q_ptEpi_K</ci>
                  </apply>
                  <ci>q_ptEpi_W</ci>
                </apply>
                <cn cellml:units="dimensionless">2</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <!--Total water & total sodium-->
      <apply>
        <eq/>
        <ci>q_tot_W</ci>
        <apply>
          <plus/>
          <ci>q_ac_W</ci>
          <ci>q_vc_W</ci>
          <ci>q_gi_W</ci>
          <ci>q_pt_W</ci>
          <ci>q_giEpi_W</ci>
          <ci>q_ptEpi_W</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>q_tot_Na</ci>
        <apply>
          <plus/>
          <ci>q_vc_Na</ci>
          <ci>q_gi_Na</ci>
          <ci>q_pt_Na</ci>
          <ci>q_giEpi_Na</ci>
          <ci>q_ptEpi_Na</ci>
        </apply>
      </apply>
    </math>
  </component>
</model>
